CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot containregexp "\\d\\d[.]\\w") (file doesnot contain "TRANS") (file doesnot contain "custom")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Hoechst
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Hoechst
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:IdentifyPrimaryObjects
