CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot containregexp "\\d\\d[.]\\w") (file doesnot contain "TRANS") (file doesnot contain "custom")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Hoechst
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunCellpose:[module_num:5|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
    Select the input image:Hoechst
    Expected object diameter:15
    Detection mode:cyto
    Name the output object:Cellpose_nuclei
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:5
    Cell probability threshold:-2.5
    GPU memory share for each worker:0.9
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Cellpose_nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ShrunkenNuclei
