CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot containregexp "\\d[.]\\w") (file doesnot contain "TRANS") (file doesnot contain "custom")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Treatment>.*) LPS(?P<LPS>[+-]) (?P<Well>[0-9])_(?P<Image>[0-9]{4})_(?P<Channel>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\](?P<Date>[0-9]{6}) (?P<Exp_Details>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:NeuO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TX Red")
    Name to assign these images:IB4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:IllumHs
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:IB4
    Name the output image:IllumIB4
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:NeuO
    Name the output image:IllumNeuO
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:Hoechst
    Name the output image:Hoechst
    Select the illumination function:IllumHs
    Select how the illumination function is applied:Subtract
    Select the input image:IB4
    Name the output image:IB4
    Select the illumination function:IllumIB4
    Select how the illumination function is applied:Subtract
    Select the input image:NeuO
    Name the output image:NeuO
    Select the illumination function:IllumNeuO
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RunCellpose:[module_num:9|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
    Select the input image:Hoechst
    Expected object diameter:15
    Detection mode:cyto
    Name the output object:Cellpose_nuclei
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:5
    Cell probability threshold:-2.5
    GPU memory share for each worker:0.9
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

FilterObjects:[module_num:10|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
    Select the objects to filter:Cellpose_nuclei
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:FilterObjects
    Name the output objects:Shrunken_nuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
MeasureImageIntensity:[module_num:12|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
    Select images to measure:Hoechst, IB4, NeuO
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Shrunken_nuclei
    Calculate custom percentiles:Yes
    Specify percentiles to measure:99

ImageMath:[module_num:13|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NeuO_Rescaled
    Image or measurement?:Image
    Select the first image:NeuO
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_99_NeuO_Shrunken_nuclei

ImageMath:[module_num:14|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:IB4_Rescaled
    Image or measurement?:Image
    Select the first image:IB4
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_99_IB4_Shrunken_nuclei

ImageMath:[module_num:15|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Hs_Rescaled
    Image or measurement?:Image
    Select the first image:Hoechst
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_99_Hoechst_Shrunken_nuclei

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Shrunken_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FlagImage:[module_num:17|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:Null_Perimeter_Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Measurements for all objects in each image
    Select the object to be used for flagging:Shrunken_nuclei
    Which measurement?:AreaShape_Perimeter
    Flag images based on low values?:Yes
    Minimum value:0.1
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:Hs_Rescaled, IB4_Rescaled, NeuO_Rescaled
    Select objects to measure:Shrunken_nuclei

MeasureObjectIntensityDistribution:[module_num:19|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
    Select images to measure:Hs_Rescaled, IB4_Rescaled, NeuO_Rescaled
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Shrunken_nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ClassifyObjects:[module_num:20|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:Microglia
    Name the output objects:ClassifiedObjects
    Select the object name:Shrunken_nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Input Folder|OneDrive - University of Cambridge\\CAMBRIDGE PHD\\Biochemistry\\Papers and Reports\\2023 CGC HTS Paper\\For GitHub
    Rules or classifier file name:LowThroughput Cerebellar Coculture Support Vector Classifier.model
    Allow fuzzy feature matching?:Yes

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:Shrunken_nuclei
    Name the output image:Objects
    Select the color format:uint16
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:Outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:Shrunken_nuclei

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Hs_Rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CP Output Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:IB4_Rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:IB4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CP Output Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:NeuO_Rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:NeuO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CP Output Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP_outlines
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CP Output Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:Objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP_objects
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CP Output Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CP Output Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Shrunken_nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:29|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|CP Output Data
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CP_Database.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Shrunken_nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:No
    Properties image group count:3
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:CP
    Which objects should be used for locations?:Shrunken_nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:Classes
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
    Select an image to include:Hs_Rescaled
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:blue
    Select an image to include:IB4_Rescaled
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:red
    Select an image to include:NeuO_Rescaled
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:green
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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