CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Row>[A-P]*) - (?P<Column>[0-9]*)\(fld (?P<Field>[0-9]*) wv (?P<Wavelength>.*) - (?P<Channel>.*) *\) *.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\](?P<Folder>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "FITC")
    Name to assign these images:NeuO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "dsRed")
    Name to assign these images:IB4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Cy5")
    Name to assign these images:DR7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunCellpose:[module_num:5|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
    Select the input image:Hoechst
    Expected object diameter:15
    Detection mode:cyto
    Name the output object:Cellpose_nuclei
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:5
    Cell probability threshold:-2.5
    GPU memory share for each worker:1.0
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

FilterObjects:[module_num:6|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
    Select the objects to filter:Cellpose_nuclei
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:FilterObjects
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:Yes
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:ShrunkenNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:ShrunkenNuclei
    Name the output objects:FinalNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Perimeter
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:FinalNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:DR7, Hoechst, IB4, NeuO
    Select objects to measure:FinalNuclei

MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:DR7, Hoechst, IB4, NeuO
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:FinalNuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:FinalNuclei
    Name the output image:Objects
    Select the color format:uint16
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:Yes
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    Name the output image:Outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:FinalNuclei

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP_outlines
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Object Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CP_objects
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Object Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:17|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:S1
    Output file location:Default Output Folder sub-folder|Output Data
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Screen_Objects_Measurements.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:FinalNuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:5
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Mixed_Culture_Screening
    Which objects should be used for locations?:FinalNuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:Classes
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
    Select an image to include:Hoechst
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:blue
    Select an image to include:NeuO
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:green
    Select an image to include:IB4
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:red
    Select an image to include:DR7
    Use the image name for the display?:Yes
    Image name:Channel4
    Channel color:gray
    Select an image to include:Outlines
    Use the image name for the display?:Yes
    Image name:Channel5
    Channel color:yellow
    Do you want to add group fields?:Yes
    Enter the name of the group:Plate
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:Yes
    Automatically create a filter for each plate?:Yes
    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:18|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CP Output Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:FinalNuclei|RadialDistribution_MeanFrac_DR7_1of4,FinalNuclei|RadialDistribution_MeanFrac_DR7_4of4,FinalNuclei|RadialDistribution_MeanFrac_DR7_3of4,FinalNuclei|RadialDistribution_MeanFrac_DR7_2of4,FinalNuclei|RadialDistribution_MeanFrac_NeuO_1of4,FinalNuclei|RadialDistribution_MeanFrac_NeuO_4of4,FinalNuclei|RadialDistribution_MeanFrac_NeuO_2of4,FinalNuclei|RadialDistribution_MeanFrac_NeuO_3of4,FinalNuclei|RadialDistribution_MeanFrac_IB4_2of4,FinalNuclei|RadialDistribution_MeanFrac_IB4_3of4,FinalNuclei|RadialDistribution_MeanFrac_IB4_1of4,FinalNuclei|RadialDistribution_MeanFrac_IB4_4of4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:S1_
    Overwrite existing files without warning?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:FinalNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
