CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot containregexp "\\d[.]\\w") (file doesnot contain "outlines")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Row>[A-P]*) - (?P<Column>[0-9]*)\(fld (?P<Field>[0-9]*) wv (?P<Wavelength>.*) - (?P<Channel>.*) *\) *.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\](?P<Folder>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI") (file doesnot contain "objects")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "FITC")
    Name to assign these images:NeuO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "dsRed")
    Name to assign these images:IB4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Cy5")
    Name to assign these images:DR7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "objects")
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    Name to assign these objects:FinalNuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:FinalNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:6|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
    Select images to measure:DR7, Hoechst, IB4, NeuO
    Select objects to measure:FinalNuclei

MeasureObjectIntensityDistribution:[module_num:7|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
    Select images to measure:DR7, Hoechst, IB4, NeuO
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:FinalNuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
FilterObjects:[module_num:8|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
    Select the objects to filter:FinalNuclei
    Name the output objects:Microglia
    Select the filtering mode:Classifiers
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    Select the location of the rules or classifier file:Default Input Folder|V:\\DDI group Data\\InCell6000\\Outputs\\Tim B\\Mixed Culture Screening\\CellProfiler Analyst\\Models and Accuracy Data
    Rules or classifier file name:SCREEN Random Trees Classifier.model
    Class name:Microglia
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:Yes

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Microglia
    Name the objects to be identified:Masks
    Select the method to identify the secondary objects:Propagation
    Select the input image:IB4
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.82
    Lower and upper bounds on threshold:0.001,0.02
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    Log transform before thresholding?:No
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    Size of adaptive window:500
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Masks
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Masks
    Name the output image:MasksImage
    Select the color format:uint16
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:MasksImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:IB4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_uglia
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Pipe2 Output Microglial Object Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:S2_
    Output file location:Default Output Folder sub-folder|Microglia Morphology Analysis
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:Microglia_Morph.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:Masks
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:Pipe2
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:14|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|V:\\DDI group Data\\InCell6000\\Outputs\\Tim B\\Mixed Culture Screening\\Microglia Morphology Analysis\\230510 S1 Pipe2\\Dat
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|ExecutionTime_01Images,Image|ExecutionTime_07MeasureObjectIntensityDistribution,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_10MeasureObjectSizeShape,Image|ExecutionTime_02Metadata,Image|ExecutionTime_06MeasureObjectIntensity,Image|ExecutionTime_05MeasureObjectSizeShape,Image|ExecutionTime_04Groups,Image|ExecutionTime_09IdentifySecondaryObjects,Image|ExecutionTime_08FilterObjects,Image|ModuleError_09IdentifySecondaryObjects,Image|ModuleError_08FilterObjects,Image|ModuleError_03NamesAndTypes,Image|ModuleError_05MeasureObjectSizeShape,Image|ModuleError_01Images,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:S1_
    Overwrite existing files without warning?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Masks
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
